## Example DVT Dicom Script
## Copyright (c) 2001-2005
## Philips Medical Systems NL B.V., Agfa-Gevaert N.V.

##
## SCU Retrieve DICOMScript: 1.ds
##
## Pre-conditions:
##      - no association
##
## Test Scenario:
##      - send association for Retrieve Service Class
##              - little endian implicit VR
##      - expect reject association - Result = 1 - rejected permanent
##                             Source = 1 - DICOM UL service-user
##                             Reason/Diag = 3 - calling AE title
##                                               not recognised
##
## Expected Result:
##      - SCU signals failure to make association 
##
## Post-conditions:
##      - no association
##
SEND ASSOCIATE-RQ (
        PRESENTATION-CONTEXT-ITEMS
        ("Patient Root Query/Retrieve Information Model - MOVE SOP Class", "Implicit VR Little Endian")
)

RECEIVE ASSOCIATE-RJ (
        RESULT 1
        SOURCE 1
        REASON 3
)
