## Example DVT Dicom Script
## Copyright (c) 2001-2005
## Philips Medical Systems NL B.V., Agfa-Gevaert N.V.

##
## SCP Storage DICOMScript: assoc.ds
##
## Pre-conditions:
##      - no association
##
## Test Scenario:
##      - expect association for Storage Service Class
##              - little endian implicit VR
##      - accept association - Result/Reason = 0 - acceptance
##              - little endian explicit VR
##
## Expected Result:
##      - SCU signals successful association
##
## Post-conditions:
##      - association established
##
RECEIVE ASSOCIATE-RQ (
        PRESENTATION-CONTEXT-ITEMS
        ("Abstract Storage SOP Class", "Implicit VR Little Endian")
)

SEND ASSOCIATE-AC (
        PRESENTATION-CONTEXT-ITEMS
        ("Abstract Storage SOP Class", 0, "Implicit VR Little Endian")
)

